PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'ExpData/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  expName = cueing
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Routines
  Routine endo_setcion
    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = $cue_time + 2
      stopVal [duration (s)] = 7
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    PolygonComponent endo_right
      fillColor = 0,0,0
      lineColor [set every repeat] = black
      lineWidth = 25
      pos = (0.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent endo_left
      fillColor = 0, 0, 0
      lineColor = black
      lineWidth = 30
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent endo_cue
      fillColor = white
      ori [set every repeat] = cue_orientation
      pos [set every repeat] = cue_position
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = $cue_time + 1.5
      stopVal [duration (s)] = .75
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    PolygonComponent endo_stimulus
      contrast = 0.5
      fillColor = red
      lineColor = red
      opacity = 0.01
      pos [set every repeat] = stim_position
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = $cue_time + 2
      stopVal [duration (s)] = .1
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  Routine exo_section
    KeyboardComponent key_resp_2
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = $cue_time + 1.6
      stopVal [duration (s)] = 7
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    PolygonComponent exo_right
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      lineWidth = 25
      pos = (0.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent exo_left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      lineWidth = 25
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent exo_cue
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 30
      pos [set every repeat] = $cue_position
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = $cue_time + 1.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent exo_stimulus
      contrast = 0.5
      fillColor = red
      lineColor = red
      opacity = 0.01
      pos [set every repeat] = $stim_position
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = $cue_time + 1.6
      stopVal [duration (s)] = 0.1
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  Routine intro
    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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      text:
        Dear Participant,

        Thank you for taking part in this experiment. The objective of this experiment is to identify the effect of endogenous versus exogenous cues on both reaction time and signal detection.

        A ‘cue’ is an indication about which side the stimulus will appear on. These cues can be correct or incorrect. ‘Endogenous’ refers to a cue that one has to think about, in this case, an arrow pointing to one side. ‘Exogenous’ refers to a cue that is picked up by lower parts of the visual pathway, in this case, a flashing box.

        Sometime after receiving your cue, a red dot will appear in the square on either side. The dot is quite dim, but it helps to keep looking at the fixation cross. Your task is to press the key that corresponds to the side of the stimulus (not the cue).

        Is it on the left? Press ‘a’. Is it on the right? Press ‘l’. Press them both once to get a feel for where they are.

        Everything clear? Press spacebar to continue.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        intro_text.alignText = 'left'
  Routine outro
    TextComponent outro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = endo_cues.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.7056869244497335, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.7387684035985251, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.7866571383694275, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.28340262260056537, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.5922941594138551, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.5645407691009291, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.42702221127828477, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'endo', 'cue_orientation': -90, 'cue_position': (-0.035, 0), 'cue_time': 0.02396326924047798, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'}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
    Routine endo_setcion
  LoopTerminator trials
  LoopInitiator exo_trials loopType="TrialHandler"
    conditionsFile = exo_cues.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.33228981667356505, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.1564137278799309, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.5762605474981782, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.36271911781023525, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.24050347507599634, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.1204646432692501, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.6190691391152903, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.04126128936196305, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'},
      {'cue_stim_type': 'exo', 'cue_position': (-0.4, 0), 'cue_time': 0.49994137550299844, 'cue_type': 'correct', 'stim_position': (-0.4, 0), 'expected_response': 'a'}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
    Routine exo_section
  LoopTerminator exo_trials
  Routine outro
